CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Site>\d{2})p(?P<Plane>\d{2})-ch(?P<ChannelNumber>\d)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:BODIPY
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Hoechst
    Name the output image:IllumHoechst
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:BODIPY
    Name the output image:IllumBODIPY
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Mito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:400
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:IllumHoechst
    Select method for constructing file names:Single name
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    Enter single file name:IllumHoechst300gaussian
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    Saved file format:npy
    Output file location:Elsewhere...|E:\\Operetta_AnnaHamacher\\Cellprofiler\\20210806_S2R+_Compounds_Proksch_Ventura_TMRE_v4\\plate1\\60min\\IlluminationCorrection
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:IllumBODIPY
    Select method for constructing file names:Single name
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    Enter single file name:IllumBODIPY100gaussian
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    Saved file format:npy
    Output file location:Elsewhere...|E:\\Operetta_AnnaHamacher\\Cellprofiler\\20210806_S2R+_Compounds_Proksch_Ventura_TMRE_v4\\plate1\\60min\\IlluminationCorrection
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumMito
    Select method for constructing file names:Single name
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    Enter single file name:IllumMito400gaussian
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    Saved file format:npy
    Output file location:Elsewhere...|E:\\Operetta_AnnaHamacher\\Cellprofiler\\20210806_S2R+_Compounds_Proksch_Ventura_TMRE_v4\\plate1\\60min\\IlluminationCorrection
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
